PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Completed URL = $"https://umich.qualtrics.com/jfe/form/SV_8iCjsEtIjqpbwQS?PROLIFIC_PID=" + expInfo["participant"]
  Experiment info = {'participant': '', 'gender': "['male', 'female', 'other', 'do not want to say']", 'age': ''}
  Full-screen window = True
  Monitor = Lab
  Save log file = False
  Screen = 1
  Units = pix
  Window size (pixels) = [1600, 1200]
  color = black
  expName = Forced_Response_scene_contrast
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Routines
  Routine end_study
    TextComponent study_over
      letterHeight = text_size
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = End of the task!
      units = pix
      wrapWidth = text_wrap
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    CodeComponent EndStudy_Code
      Code Type = Auto->JS
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      End Experiment:
        eyetracker.setConnectionState(False)
        ioServer.quit()
  Routine ins1
    CodeComponent func
      Code Type = Py
      Begin Experiment:
        import json
        import imageio
        from math import cos, exp, pow, sqrt, pi
        import numpy as np

        def createBullseye(target_loc,factor,img_array):
            #from math import cos, exp, pow, sqrt, pi
            #import numpy as np
            #target_location(x,y) tuple - location of bullseye target
            #factor [0+] - how much you want the bullseye function

            img_array = img_array/255.0 #normalize to 0-1

            s_p = 20
            X = np.tile( np.linspace( 1, s_p, s_p), (s_p, 1) )
            Y = X.T
            c = (s_p + 1.0) / 2 if s_p%2 == 0 else s_p/2
            cdist_grid = np.sqrt((X-c)**2 + (Y-c)**2)

            #gaussian:
            sigma = 5
            x = cdist_grid
            gauss_grid = np.exp( -(x**2) / (2*sigma**2) )
            # sine
            l = 3
            x = (cdist_grid / np.max(cdist_grid)) * l*2*np.pi
            sin_grid = np.sin(x)

            # combine
            bullseye = gauss_grid * sin_grid
            bullseye = bullseye / np.max(bullseye) # make sure peak == 1

            # determine which part of the bullseye should brighten, which should darken:
            brighten = np.array(bullseye > 0, dtype=int)
            darken = np.array(bullseye < 0, dtype=int)

            #patch = img_array[target_loc[1]:target_loc[1]+s_p,target_loc[0]:target_loc[0]+s_p]
            patch = img_array[target_loc[1]-int(s_p/2):target_loc[1]+int(s_p/2),target_loc[0]-int(s_p/2):target_loc[0]+int(s_p/2)]

            factor = factor    #Wouter's original was 2.5

            # brighten patch:
            # bullseye * 1/2distance from one:
            sd = np.std(patch)
            m = np.mean(patch)

            if sd < 0.06:
                print("too low sd:")
                sd = 0.08
            elif sd > .35:
                print("too high sd:")
                sd = 0.17 #use the median stdev value of all patches across all images
            c = sd/m
            #print c, m, sd
            brightened = brighten * (patch + bullseye * (1 - patch) * factor * sd)
            # darken patch:
            # bullseye * 1/2distance from zero:
            darkened = darken * (patch + bullseye * (patch) * factor * sd)
            # set in the image
            img_array[target_loc[1]:target_loc[1]+s_p,target_loc[0]:target_loc[0]+s_p] = brightened + darkened
            #mimg = Image.fromarray(img_array * 256)
            #mimg = Image.convert("F",mimg)
            mimg = img_array * 255
            mimg = np.asarray(mimg)
            mimg = mimg.astype(np.uint8)
            return mimg, sd


        def check_location(sac, target_loc, r):
            start_x = sac.start_gaze_x
            start_y = sac.start_gaze_y
            end_x = sac.end_gaze_x
            end_y = sac.end_gaze_y
            dist = math.hypot(end_x - target_loc[0], end_y - target_loc[1])
            if dist <= r:
                found = 1
            else:
                found = 0
            return found

        def check_timing(sac, origin):
            saccade_duration = sac.duration
            saccade_endtime = sac.time
            SRT = saccade_endtime - saccade_duration - origin
            #PT = 1000*(SRT - target_onset)
            if (abs(SRT - 3) < .2):
                timing = 'ontime'
            elif SRT - 3 < -.2:
                timing = 'fast'
            else:
                timing = 'slow'
            return timing
    CodeComponent eyetracking
      Code Type = Py
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      Begin Experiment:
        # Setup eyetracking
        import psychopy.iohub as io
        if expInfo['participant']=='':
            fname = 'EXPFILE'
        else:
            fname = expInfo['participant']
        ioDevice = 'eyetracker.hw.sr_research.eyelink.EyeTracker'
        ioConfig = {
            ioDevice: {
                'name': 'tracker',
                'model_name': 'EYELINK 1000 REMOTE',
                'simulation_mode': False,
                'network_settings': '100.1.1.1',
                'default_native_data_file_name': fname,
                'runtime_settings': {
                    'sampling_rate': 500.0,
                    'track_eyes': 'RIGHT_EYE',
                    'sample_filtering': {
                        'sample_filtering': 'FILTER_LEVEL_2',
                        'elLiveFiltering': 'FILTER_LEVEL_1',
                    },
                    'vog_settings': {
                        'pupil_measure_types': 'PUPIL_DIAMETER',
                        'tracking_mode': 'PUPIL_CR_TRACKING',
                        'pupil_center_algorithm': 'ELLIPSE_FIT',
                    }
                },
                'calibration': {
                    'type': 'FIVE_POINTS',
                    'color_type': None,
                    'unit_type': None,
                    'auto_pace': False,
                    'target_duration': 1.5,
                    'target_delay': 0.75,
                    'pacing_speed': 1.0,
                    'screen_background_color': [-1, -1, -1],
                    'target_type': 'CIRCLE_TARGET',
                    'target_attributes': {'outer_diameter': 40.0, 'inner_diameter': 20.0, 'outer_stroke_width': 2.0, 'outer_fill_color': [-1, -1, -1], 'outer_line_color': [-1., -1., -1.], 'inner_stroke_width': 2.0, 'inner_fill_color': [1, 1, 1], 'inner_line_color': [1., 1., 1.], 'outer_color': None, 'inner_color': None}
                    }
            }
        }
        ioSession = '1'
        if 'session' in expInfo:
            ioSession = str(expInfo['session'])
        ioServer = io.launchHubServer(window=win, experiment_code='Forced Response ColSing_Eye', session_code=ioSession, datastore_name=filename, **ioConfig)
        eyetracker = ioServer.getDevice('tracker')
    CodeComponent exp_params
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub.constants import EventConstants
        import math
        import psychtoolbox as ptb
        from psychopy import sound

        win.mouseVisible = False
        #### Condition File ####
        #cond_files = []
        #shuffle(cond_files)
        #condition_file = cond_files[0]

        #### Numbers ####
        # n of loops within each block
        nReps_free = 1
        nReps_timing = 1
        nReps_forced = 1
        # n of blocks
        nBlocks = 4

        #### Graphics ####
        # size of fixation
        size_fixation = 80
        # instruction text size
        text_size = 45
        # text_wrap
        text_wrap = 1280
    TextComponent ins1_text
      letterHeight = text_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = text_wrap
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      text:
        You are about to begin a block of practice trials in a visual search game.

        On each trial, a fixation cross will show at the screen center for you to stare at. Shortly after, an image will show on the screen. The image contains a small bull's eye target. Your task is to find the target. Once you have found it, press the spacebar.

        Please let the experimenter know if you have any questions.

        Press the SPACE BAR to begin
    KeyboardComponent ins1_key
      allowedKeys = ['space','6']
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent ins1_code
      Code Type = Auto->JS
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      End Routine:
        if ins1_key.keys == '6':
            nReps_free = 0
  Routine ins2
    CodeComponent ins2_code
      Code Type = Py
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      End Routine:
        if ins2_key.keys == '6':
            nReps_timing = 0

        # used to track cumulative performance
        correct_timing = 0
    TextComponent ins2_text
      letterHeight = text_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = text_wrap
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      text:
        You are about to begin a block of practice trials in a rapid timing game.

        On each trial, you will see a fixation cross for you to stare at. Then, you will hear four beeps. While the beeps are playing, an image will show on the screen. Your goal is still to find the bull's eye target. But you must move your eyes EXACTLY when the fourth beep plays. Do NOT move your eyes too early, even if the image appears on the screen. Make your eye movement exactly at the fourth beep.

        After each trial, you will get feedback about how you did. We will tell you if you were too slow or too fast.

        Please let the experimenter know if you have any questions.

        Press the SPACE BAR to begin
    KeyboardComponent ins2_key
      allowedKeys = ['space','6']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ins3
    TextComponent ins3_text
      letterHeight = text_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = text_wrap
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      text:
        ## Experimental Blocks ##

        You are about to begin a block of trials in a timed visual search game. On each trial, you will see a fixation cross for you to stare at. Then, you will hear four beeps. While the beeps are playing, an image will show on the screen. Your goal is still to find the bull's eye target. But you must move your eyes EXACTLY when the fourth beep plays. Do NOT move your eyes too early, even if the image appears on the screen. Make your eye movement exactly at the fourth beep.

        Please let the experimenter know if you have any questions.

        Press the SPACE BAR to begin.
    KeyboardComponent ins3_key
      allowedKeys = ['space','q']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_timing
    CodeComponent draw_bullseye_t
      Code Type = Py
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      Begin Routine:
        # read image
        path = 'practice_imgs/'+fname
        img = imageio.imread(path)

        #determine the multiplication factor based on number of eye movements
        #made on the previous trial.
        if prev_target_found == 1 and prev_emcount <= 3 and prev_emcount != -1:
            if c > 2:
                c = c - .2
            else:
                c = c #don't go below a factor of 2
        elif prev_target_found == 0 or prev_emcount > 6:
            c = c + .2
        else:
            c = c

        bimg, sd = createBullseye((target_x, target_y), c, img)
        imageio.imwrite('test.jpg', bimg)

        #image_stim = visual.ImageStim(win, image='test.jpg')
        #image_stim.draw()
        #win.flip()
    CodeComponent code_t
      Code Type = Py
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      Begin Routine:
        # determine array onset time
        target_onset = randint(150, 300)/100

        # set up tones
        sound_1 = sound.Sound(value = 330, secs = .2, sampleRate = 48000, stereo = True)
        sound_2 = sound.Sound(value = 330, secs = .2, sampleRate = 48000, stereo = True)
        sound_3 = sound.Sound(value = 330, secs = .2, sampleRate = 48000, stereo = True)
        sound_4 = sound.Sound(value = 660, secs = .5, sampleRate = 48000, stereo = True)
        now = ptb.GetSecs()
        sound_1.play(when=now)  # play in EXACTLY 0s
        sound_2.play(when=now+1)  # play in EXACTLY 1s
        sound_3.play(when=now+2)  # play in EXACTLY 2s
        sound_4.play(when=now+3)  # play in EXACTLY 3s

        # used to decide whether to ignore the saccade right after the blink
        justBlinked = 0
        valid_first_saccade = False
        saccade_list = []

        # clear events
        eyetracker.clearEvents()

        # send event start signal
        eventmsg = '%s search start Block_%i Trial_%i' % (trial_type, blockN, trialN)
        eyetracker.sendMessage(eventmsg)
        ioServer.sendMessageEvent(text = eventmsg)
        print(eventmsg)
      Each Frame:
        #if sound_4.status==FINISHED:
        #    continueRoutine=False

        # get eye tracker events
        events = eyetracker.getEvents()

        for e in events:
            #ignore blinks
            if e.type == EventConstants.BLINK_END:
                justBlinked = 1
            # check for saccades
            elif e.type == EventConstants.SACCADE_END:
                # ignore the saccade ending event right after the blink
                if justBlinked == 1:
                    justBlinked = 0
                # save saccade
                else:
                    if t >= target_onset:
                        saccade_list.append(e)
                    # if this is the first saccade
                    if len(saccade_list) == 1:
                        # check if saccade starts from the circle (could be more lenient)
                        if math.hypot(e.start_gaze_x - 0, e.start_gaze_y - 0) <= size_fixation:
                                valid_first_saccade = True
      End Routine:
        # send event end signal
        eventmsg = '%s search end Block_%i Trial_%i' % (trial_type, blockN, trialN)
        eyetracker.sendMessage(eventmsg)
        ioServer.sendMessageEvent(text = eventmsg)
        print(eventmsg)


        # subjective report
        if len(key_resp_t.keys) != 0:
            report_found = True
        else:
            report_found = False

        # objective saccades
        saccade_found = []
        if len(saccade_list) != 0:
            for s in saccade_list:
                found = check_location(s, (target_x_py, target_y_py), 100)
                saccade_found.append(found)
            if (1 in saccade_found) & (report_found == True):
                prev_target_found = 1
                prev_emcount = saccade_found.index(1) + 1
            else:
                prev_target_found = 0
                prev_emcount = len(saccade_list)
        else:
            prev_target_found = -1
            prev_emcount = -1

        # check where did the subject look on first saccade
        if len(saccade_list) != 0:
            first_saccade = saccade_list[0]
            first_saccade_found = saccade_found[0]
            first_saccade_endtime = first_saccade.time
            first_saccade_duration = first_saccade.duration
            first_saccade_status = first_saccade.status
            SRT = first_saccade_endtime - first_saccade_duration - fixation_t.tStartRefresh # end time - duration -  stimulus onset
            PT = 1000*(SRT - target_onset)
            start_x = first_saccade.start_gaze_x
            start_y = first_saccade.start_gaze_y
            end_x = first_saccade.end_gaze_x
            end_y = first_saccade.end_gaze_y
            if end_x <= 0:
                first_saccade_dest = 'left'
            else:
                first_saccade_dest = 'right'
            first_saccade_timing = check_timing(first_saccade, fixation_t.tStartRefresh)
        else:
            first_saccade_found = None
            first_saccade_endtime = None
            first_saccade_duration = None
            first_saccade_status = None
            SRT = None
            PT = None
            first_saccade_dest = None
            start_x = None
            start_y = None
            end_x = None
            end_y = None
            first_saccade_timing = None


        if len(saccade_list) != 0:
            if (1 in saccade_found) & (report_found == True) & (first_saccade_timing == 'ontime'):
                feedback_msg = 'Good Timing\nTarget Found!'
                tone = 'correct_both.wav'
                correct_timing += 1
            elif (first_saccade_timing == 'ontime'):
                feedback_msg = 'Good Timing\nTarget Not Found!'
                tone = 'correct_timing.wav'
                correct_timing += 1
            elif (first_saccade_timing == 'slow'):
                feedback_msg = 'Too slow!'
                tone = 'wrong_timing.wav'
            elif (first_saccade_timing == 'fast'):
                feedback_msg = 'Too fast!'
                tone = 'wrong_timing.wav'
        else:
            feedback_msg = 'No valid eye movements!'

        tone_dura = 1

        # log data
        thisExp.addData('target_onset', target_onset)
        thisExp.addData('valid_first_saccade', valid_first_saccade)
        thisExp.addData('first_saccade_duration', first_saccade_duration)
        thisExp.addData('first_saccade_endtime', first_saccade_endtime)
        thisExp.addData('first_saccade_status', first_saccade_status)
        thisExp.addData('SRT', SRT)
        thisExp.addData('first_saccade_found', first_saccade_found)
        thisExp.addData('first_saccade_dest', first_saccade_dest)
        thisExp.addData('start_x', start_x)
        thisExp.addData('start_y', start_y)
        thisExp.addData('end_x', end_x)
        thisExp.addData('end_y', end_y)
        thisExp.addData('feedback', feedback_msg)
        thisExp.addData('report_found', report_found)
        thisExp.addData('saccade_list', json.dumps(saccade_list))
        thisExp.addData('saccade_found', json.dumps(saccade_found))
        thisExp.addData('PT', PT)
        thisExp.addData('ontime', first_saccade_timing)
        thisExp.addData('feedback', feedback_msg)
        thisExp.addData('c_value', c)
        thisExp.addData('prev_target_found', prev_target_found)
        thisExp.addData('prev_emcount', prev_emcount)
        thisExp.addData('sd_value', sd)
    ImageComponent image_t
      image [set every repeat] = test.jpg
      startVal [time (s)] = target_onset
      stopVal [time (s)] = 8
      units = pix
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    PolygonComponent fixation_t
      fillColor = white
      lineWidth = 2
      shape = cross
      size = size_fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_t
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
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  Routine end_block
    CodeComponent rest_code
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = 'Congrats! You have completed block ' + str(block_id) + ' of ' + str(nBlocks)
    TextComponent block_text
      color = $[-1.000,0.004,-1.000]
      letterHeight = text_size
      pos = (0, 300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent rest_text
      color = $[-1.000,0.004,-1.000]
      letterHeight = text_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = text_wrap
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      text:
        Feel free to relax for a moment.

        Remember: always make your eye movement at the fourth beep.

        It's important to locate the target, but it is MOST IMPROTANT to move your eyes on time!!!

        Press the SPACE BAR when you are ready to go on.
    KeyboardComponent rest_key
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_check
    PolygonComponent fixation_cross
      fillColor = white
      lineWidth = 2
      shape = cross
      size = size_fixation
      startVal [time (s)] = 0.0
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    CodeComponent CheckFixation
      Code Type = Py
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      Begin Routine:
        # subject must look at the fixation for 300 ms
        timer = core.CountdownTimer(1)

        if free_loop.finished == 0:
            blockN = 0
            trial_type = 'free'
            trialN = free_loop.thisN
        elif repeat_timing.finished == 0:
            blockN = repeat_timing.thisN
            trial_type = 'timing'
            trialN = timing_loop.thisN
        else:
            blockN = block_loop.thisN
            trial_type = 'forced'
            trialN = forced_loop.thisN

        # send event start signal
        eventmsg = '%s fixation start Block_%i Trial_%i' % (trial_type, blockN, trialN)
        eyetracker.sendMessage(eventmsg)
        ioServer.sendMessageEvent(text = eventmsg)
        print(eventmsg)
      Each Frame:
        # Get last eye position
        gpos = eyetracker.getLastGazePosition()

        if isinstance(gpos, (tuple, list)):
            # There was an eye position available
            # Check if it is within a visual stim called 'gaze_region_stim'
            #if fixation.contains(gpos):
            if math.hypot(gpos[0] - 0, gpos[1] - 0) <= size_fixation:
                pass
            else:
                timer.reset()
        else:
            timer.reset()

        if timer.getTime() <= 0:
            continueRoutine = False
      End Routine:
        # send event start signal
        eventmsg = '%s fixation end Block_%i Trial_%i' % (trial_type, blockN, trialN)
        eyetracker.sendMessage(eventmsg)
        ioServer.sendMessageEvent(text = eventmsg)
        print(eventmsg)
  Routine start_recording
    StaticComponent StartRecISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    CodeComponent StartRec
      Code Type = Auto->JS
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      Begin Routine:
        #win.mouseVisible = False
        eyetracker.setRecordingState(True)
  Routine stop_recording
    CodeComponent StopRec
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.setRecordingState(False)
    StaticComponent StopRecISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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  Routine recalibration
    CodeComponent Cali_code
      Code Type = Py
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      Begin Routine:
        # recalibration
        win.winHandle.minimize()
        eyetracker.runSetupProcedure()
        win.winHandle.activate()
        win.winHandle.maximize()
      End Routine:
        win.winHandle.set_mouse_position(0,0)
        win.flip()
  Routine feedback
    TextComponent feedback_text
      letterHeight = text_size
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.25
      text [set every repeat] = $feedback_msg
      wrapWidth = text_wrap
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  Routine repeat_timing_practice
    CodeComponent endtimingpracticeCode
      Code Type = Py
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      Begin Routine:
        if nReps_timing != 0:
            timing_perf = correct_timing / (nReps_timing*15)
        else:
            timing_perf = 999 # maually skipped

        if timing_perf > .4:
            repeat_timing.finished = True
            #feedback_msg = "%i out of %i trials were on time. Let's move on." % (correct_timing, timing_loop.thisN)
        #else:
            #feedbacl_msg = "%i out of %i trials were on time. Let's re-do this practice." % (correct_timing, timing_loop.thisN)
  Routine trial_free
    CodeComponent draw_bullseye
      Code Type = Py
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      Begin Experiment:
        prev_target_found = -1
        prev_emcount = -1
        c = 3
      Begin Routine:
        # read image
        path = 'practice_imgs/'+fname
        img = imageio.imread(path)

        #determine the multiplication factor based on number of eye movements
        #made on the previous trial.
        if prev_target_found == 1 and prev_emcount <= 3 and prev_emcount != -1:
            if c > 2:
                c = c - .2
            else:
                c = c #don't go below a factor of 2
        elif prev_target_found == 0 or prev_emcount > 6:
            c = c + .2
        else:
            c = c

        bimg, sd = createBullseye((target_x, target_y), c, img)
        imageio.imwrite('test.jpg', bimg)

        #image_stim = visual.ImageStim(win, image='test.jpg')
        #image_stim.draw()
        #win.flip()
    ImageComponent image
      image [set every repeat] = test.jpg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    CodeComponent freeRT_code
      Code Type = Py
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      Begin Routine:
        # clear events
        eyetracker.clearEvents()

        # used to decide whether to ignore the saccade right after the blink
        justBlinked = 0
        valid_first_saccade = False
        saccade_list = []

        # send event start signal
        eventmsg = '%s search start Block_%i Trial_%i' % (trial_type, blockN, trialN)
        eyetracker.sendMessage(eventmsg)
        ioServer.sendMessageEvent(text = eventmsg)
        print(eventmsg)
      Each Frame:
        # get eye tracker events
        events = eyetracker.getEvents()

        for e in events:
            #ignore blinks
            if e.type == EventConstants.BLINK_END:
                justBlinked = 1
            # check for saccades
            elif e.type == EventConstants.SACCADE_END:
                # ignore the saccade ending event right after the blink
                if justBlinked == 1:
                    justBlinked = 0
                # save saccade
                else:
                    saccade_list.append(e)
                    # if this is the first saccade
                    if len(saccade_list) == 1:
                        # check if saccade starts from the circle (could be more lenient)
                        if math.hypot(e.start_gaze_x - 0, e.start_gaze_y - 0) <= size_fixation:
                                valid_first_saccade = True
      End Routine:
        ## send event end signal
        eventmsg = '%s search end Block_%i Trial_%i' % (trial_type, blockN, trialN)
        eyetracker.sendMessage(eventmsg)
        ioServer.sendMessageEvent(text = eventmsg)
        print(eventmsg)

        # subjective report
        if len(key_resp.keys) != 0:
            report_found = True
        else:
            report_found = False

        # objective saccades
        saccade_found = []
        if len(saccade_list) != 0:
            for s in saccade_list:
                found = check_location(s, (target_x_py, target_y_py), 100)
                saccade_found.append(found)
            if (1 in saccade_found) & (report_found == True):
                prev_target_found = 1
                prev_emcount = saccade_found.index(1) + 1
                feedback_msg = 'Target Found!'
            else:
                prev_target_found = 0
                prev_emcount = len(saccade_list)
                feedback_msg = 'Target Not Found!'
        else:
            feedback_msg = 'No valid eye movements!'
            prev_target_found = -1
            prev_emcount = -1


        # check where did the subject look on first saccade
        if len(saccade_list) != 0:
            first_saccade = saccade_list[0]
            first_saccade_found = saccade_found[0]
            first_saccade_endtime = first_saccade.time
            first_saccade_duration = first_saccade.duration
            first_saccade_status = first_saccade.status
            SRT = first_saccade_endtime - first_saccade_duration - image.tStartRefresh # end time - duration -  stimulus onset

            start_x = first_saccade.start_gaze_x
            start_y = first_saccade.start_gaze_y
            end_x = first_saccade.end_gaze_x
            end_y = first_saccade.end_gaze_y
            if end_x <= 0:
                first_saccade_dest = 'left'
            else:
                first_saccade_dest = 'right'
        else:
            first_saccade_found = None
            first_saccade_endtime = None
            first_saccade_duration = None
            first_saccade_status = None
            SRT = None
            first_saccade_dest = None
            start_x = None
            start_y = None
            end_x = None
            end_y = None

        # log data
        thisExp.addData('valid_first_saccade', valid_first_saccade)
        thisExp.addData('first_saccade_duration', first_saccade_duration)
        thisExp.addData('first_saccade_endtime', first_saccade_endtime)
        thisExp.addData('first_saccade_status', first_saccade_status)
        thisExp.addData('SRT', SRT)
        thisExp.addData('first_saccade_found', first_saccade_found)
        thisExp.addData('first_saccade_dest', first_saccade_dest)
        thisExp.addData('start_x', start_x)
        thisExp.addData('start_y', start_y)
        thisExp.addData('end_x', end_x)
        thisExp.addData('end_y', end_y)
        thisExp.addData('feedback', feedback_msg)
        thisExp.addData('report_found', report_found)
        thisExp.addData('saccade_list', json.dumps(saccade_list))
        thisExp.addData('saccade_found', json.dumps(saccade_found))
        thisExp.addData('c_value', c)
        thisExp.addData('prev_target_found', prev_target_found)
        thisExp.addData('prev_emcount', prev_emcount)
        thisExp.addData('sd_value', sd)
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine ITI
    PolygonComponent fixation_cross_2
      fillColor = white
      lineWidth = 2
      shape = cross
      size = size_fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine practice_feedback
    TextComponent feedback_text_2
      letterHeight = text_size
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $feedback_msg
      wrapWidth = text_wrap
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  EyetrackerValidationRoutine avalidatioana
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 15
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 30
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = black
    innerBorderColor = white
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 5
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 10
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    units = from exp settings
  Routine warn_start_loc
    CodeComponent skip_warn
      Code Type = Auto->JS
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      Begin Routine:
        if valid_first_saccade:
            continueRoutine=False
    TextComponent warn_text
      letterHeight = text_size
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.25
      text = Stare at the screen center until the image shows up!
      wrapWidth = text_wrap
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  Routine trial_forced
    CodeComponent draw_bullseye_f
      Code Type = Py
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      Begin Routine:
        # read image
        path = 'exp_imgs/'+fname
        img = imageio.imread(path)

        #determine the multiplication factor based on number of eye movements
        #made on the previous trial.
        if prev_target_found == 1 and prev_emcount <= 3 and prev_emcount != -1:
            if c > 2:
                c = c - .2
            else:
                c = c #don't go below a factor of 2
        elif prev_target_found == 0 or prev_emcount > 6:
            c = c + .2
        else:
            c = c

        bimg, sd = createBullseye((target_x, target_y), c, img)
        imageio.imwrite('test.jpg', bimg)

        #image_stim = visual.ImageStim(win, image='test.jpg')
        #image_stim.draw()
        #win.flip()
    CodeComponent code_f
      Code Type = Py
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      Begin Routine:
        # determine array onset time
        target_onset = randint(150, 300)/100

        # set up tones
        sound_1 = sound.Sound(value = 330, secs = .2, sampleRate = 48000, stereo = True)
        sound_2 = sound.Sound(value = 330, secs = .2, sampleRate = 48000, stereo = True)
        sound_3 = sound.Sound(value = 330, secs = .2, sampleRate = 48000, stereo = True)
        sound_4 = sound.Sound(value = 660, secs = .5, sampleRate = 48000, stereo = True)
        now = ptb.GetSecs()
        sound_1.play(when=now)  # play in EXACTLY 0s
        sound_2.play(when=now+1)  # play in EXACTLY 1s
        sound_3.play(when=now+2)  # play in EXACTLY 2s
        sound_4.play(when=now+3)  # play in EXACTLY 3s

        # used to decide whether to ignore the saccade right after the blink
        justBlinked = 0
        valid_first_saccade = False
        saccade_list = []

        # clear events
        eyetracker.clearEvents()

        # send event start signal
        eventmsg = '%s search start Block_%i Trial_%i' % (trial_type, blockN, trialN)
        eyetracker.sendMessage(eventmsg)
        ioServer.sendMessageEvent(text = eventmsg)
        print(eventmsg)
      Each Frame:
        #if sound_4.status==FINISHED:
        #    continueRoutine=False

        # get eye tracker events
        events = eyetracker.getEvents()

        for e in events:
            #ignore blinks
            if e.type == EventConstants.BLINK_END:
                justBlinked = 1
            # check for saccades
            elif e.type == EventConstants.SACCADE_END:
                # ignore the saccade ending event right after the blink
                if justBlinked == 1:
                    justBlinked = 0
                # save saccade
                else:
                    if  t >= target_onset:
                        saccade_list.append(e)
                    # if this is the first saccade
                    if len(saccade_list) == 1:
                        # check if saccade starts from the circle (could be more lenient)
                        if math.hypot(e.start_gaze_x - 0, e.start_gaze_y - 0) <= size_fixation:
                                valid_first_saccade = True
      End Routine:
        # send event end signal
        eventmsg = '%s search end Block_%i Trial_%i' % (trial_type, blockN, trialN)
        eyetracker.sendMessage(eventmsg)
        ioServer.sendMessageEvent(text = eventmsg)
        print(eventmsg)


        # subjective report
        if len(key_resp_f.keys) != 0:
            report_found = True
        else:
            report_found = False

        saccade_found = []
        # objective saccades
        if len(saccade_list) != 0:
            for s in saccade_list:
                found = check_location(s, (target_x_py, target_y_py), 100)
                saccade_found.append(found)
            if (1 in saccade_found) & (report_found == True):
                prev_target_found = 1
                prev_emcount = saccade_found.index(1) + 1
            else:
                prev_target_found = 0
                prev_emcount = len(saccade_list)
        else:
            prev_target_found = -1
            prev_emcount = -1

        # check where did the subject look on first saccade
        if len(saccade_list) != 0:
            first_saccade = saccade_list[0]
            first_saccade_found = saccade_found[0]
            first_saccade_endtime = first_saccade.time
            first_saccade_duration = first_saccade.duration
            first_saccade_status = first_saccade.status
            SRT = first_saccade_endtime - first_saccade_duration - fixation_f.tStartRefresh # end time - duration -  stimulus onset
            PT = 1000*(SRT - target_onset)
            start_x = first_saccade.start_gaze_x
            start_y = first_saccade.start_gaze_y
            end_x = first_saccade.end_gaze_x
            end_y = first_saccade.end_gaze_y
            if end_x <= 0:
                first_saccade_dest = 'left'
            else:
                first_saccade_dest = 'right'
            first_saccade_timing = check_timing(first_saccade, fixation_f.tStartRefresh)
        else:
            first_saccade_found = None
            first_saccade_endtime = None
            first_saccade_duration = None
            first_saccade_status = None
            SRT = None
            PT = None
            first_saccade_dest = None
            start_x = None
            start_y = None
            end_x = None
            end_y = None
            first_saccade_timing = None

        if len(saccade_list) != 0:
            if (1 in saccade_found) & (report_found == True) & (first_saccade_timing == 'ontime'):
                feedback_msg = 'Good Timing\nTarget Found!'
                tone = 'correct_both.wav'
                correct_timing += 1
            elif (first_saccade_timing == 'ontime'):
                feedback_msg = 'Good Timing\nTarget Not Found!'
                tone = 'correct_timing.wav'
                correct_timing += 1
            elif (first_saccade_timing == 'slow'):
                feedback_msg = 'Too slow!'
                tone = 'wrong_timing.wav'
            elif (first_saccade_timing == 'fast'):
                feedback_msg = 'Too fast!'
                tone = 'wrong_timing.wav'
        else:
            feedback_msg = 'No valid eye movements!'

        tone_dura = 1

        # log data
        thisExp.addData('target_onset', target_onset)
        thisExp.addData('valid_first_saccade', valid_first_saccade)
        thisExp.addData('first_saccade_duration', first_saccade_duration)
        thisExp.addData('first_saccade_endtime', first_saccade_endtime)
        thisExp.addData('first_saccade_status', first_saccade_status)
        thisExp.addData('SRT', SRT)
        thisExp.addData('first_saccade_found', first_saccade_found)
        thisExp.addData('first_saccade_dest', first_saccade_dest)
        thisExp.addData('start_x', start_x)
        thisExp.addData('start_y', start_y)
        thisExp.addData('end_x', end_x)
        thisExp.addData('end_y', end_y)
        thisExp.addData('feedback', feedback_msg)
        thisExp.addData('report_found', report_found)
        thisExp.addData('saccade_list', json.dumps(saccade_list))
        thisExp.addData('saccade_found', json.dumps(saccade_found))
        thisExp.addData('PT', PT)
        thisExp.addData('ontime', first_saccade_timing)
        thisExp.addData('feedback', feedback_msg)
        thisExp.addData('c_value', c)
        thisExp.addData('prev_target_found', prev_target_found)
        thisExp.addData('prev_emcount', prev_emcount)
        thisExp.addData('sd_value', sd)
    ImageComponent image_f
      image [set every repeat] = test.jpg
      startVal [time (s)] = target_onset
      stopVal [time (s)] = 8
      units = pix
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    PolygonComponent fixation_f
      fillColor = white
      lineWidth = 2
      shape = cross
      size = size_fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_f
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
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  Routine start_block
Flow
  Routine ins1
  Routine recalibration
  Routine start_recording
  LoopInitiator free_loop loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = prc_conditions.csv
    loopType = sequential
    nReps = nReps_free
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    conditions:
      [OrderedDict([('pic', 'caimg_084.jpg'), ('reduced_side', 'left'), ('target_side', 'left'), ('trial', 1), ('block_id', 1), ('fname', 'leftcaimg_084.jpg'), ('target_loc', '(339, 331)'), ('target_loc_py', '(-173, 53)')]),
      OrderedDict([('pic', 'caimg_058.jpg'), ('reduced_side', 'right'), ('target_side', 'left'), ('trial', 2), ('block_id', 1), ('fname', 'rightcaimg_058.jpg'), ('target_loc', '(430, 514)'), ('target_loc_py', '(-82, -130)')]),
      OrderedDict([('pic', 'caimg_039.jpg'), ('reduced_side', 'right'), ('target_side', 'right'), ('trial', 3), ('block_id', 1), ('fname', 'rightcaimg_039.jpg'), ('target_loc', '(867, 256)'), ('target_loc_py', '(355, 128)')]),
      OrderedDict([('pic', 'caimg_109.jpg'), ('reduced_side', 'left'), ('target_side', 'right'), ('trial', 4), ('block_id', 1), ('fname', 'leftcaimg_109.jpg'), ('target_loc', '(886, 406)'), ('target_loc_py', '(374, -22)')]),
      OrderedDict([('pic', 'casun_blblulildyncrsov.jpg'), ('reduced_side', 'left'), ('target_side', 'right'), ('trial', 5), ('block_id', 1), ('fname', 'leftcasun_blblulildyncrsov.jpg'), ('target_loc', '(619, 511)'), ('target_loc_py', '(107, -127)')]),
      OrderedDict([('pic', 'casun_bghhucfqkgdotdrl.jpg'), ('reduced_side', 'right'), ('target_side', 'right'), ('trial', 6), ('block_id', 1), ('fname', 'rightcasun_bghhucfqkgdotdrl.jpg'), ('target_loc', '(704, 711)'), ('target_loc_py', '(192, -327)')])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
    Routine ITI
    Routine fixation_check
    Routine trial_free
    Routine feedback
    Routine warn_start_loc
  LoopTerminator free_loop
  Routine stop_recording
  Routine end_study
